PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = EmotionalValenceMemoryRecall
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Words
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    TextComponent text
      font = ariel
      letterHeight = 0.05
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      text [set every repeat] = $neg_words
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Intro
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    TextComponent Introduction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        A word will appear on the screen.
        Press right arrow key if the word is abstract or left arrow key if it is concrete.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine DisTask
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    TextComponent task
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $math
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Type Here
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent InstText
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click To Submit
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    MouseComponent mouse
      clickable = InstText
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine Recall
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    TextComponent RecallTask
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now, write down as many words as you can remember from the list you saw earlier. Take your time and try to recall as many as possible.  Press "Click to submit" after every word.
        You have 3 minutes to complete this task.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Testing
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    TextboxComponent TestAns
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Type here
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent Instr
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click Here to Submit
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    MouseComponent mouse_2
      clickable = Instr
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine Intro
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = negwordlist.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('neg_words', 'ugly'), ('word_freq', 21), ('word_len', 4)]),
      OrderedDict([('neg_words', 'evil'), ('word_freq', 72), ('word_len', 4)]),
      OrderedDict([('neg_words', 'knife'), ('word_freq', 76), ('word_len', 5)]),
      OrderedDict([('neg_words', 'crisis'), ('word_freq', 82), ('word_len', 6)]),
      OrderedDict([('neg_words', 'lost'), ('word_freq', 173), ('word_len', 4)]),
      OrderedDict([('neg_words', 'loser'), ('word_freq', 1), ('word_len', 5)]),
      OrderedDict([('neg_words', 'alone'), ('word_freq', 195), ('word_len', 5)]),
      OrderedDict([('neg_words', 'lie'), ('word_freq', 59), ('word_len', 3)]),
      OrderedDict([('neg_words', 'rotten'), ('word_freq', 2), ('word_len', 6)]),
      OrderedDict([('neg_words', 'rage'), ('word_freq', 16), ('word_len', 4)]),
      OrderedDict([('neg_words', 'angry'), ('word_freq', 45), ('word_len', 5)]),
      OrderedDict([('neg_words', 'crime'), ('word_freq', 34), ('word_len', 5)]),
      OrderedDict([('neg_words', 'vomit'), ('word_freq', 3), ('word_len', 5)]),
      OrderedDict([('neg_words', 'toxic'), ('word_freq', 3), ('word_len', 5)]),
      OrderedDict([('neg_words', 'betray'), ('word_freq', 4), ('word_len', 6)]),
      OrderedDict([('neg_words', 'rape'), ('word_freq', 5), ('word_len', 4)]),
      OrderedDict([('neg_words', 'fear'), ('word_freq', 127), ('word_len', 4)]),
      OrderedDict([('neg_words', 'corpse'), ('word_freq', 7), ('word_len', 6)]),
      OrderedDict([('neg_words', 'insult'), ('word_freq', 7), ('word_len', 6)]),
      OrderedDict([('neg_words', 'thief'), ('word_freq', 8), ('word_len', 5)])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
    Routine Words
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = DisTask.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('task', '10 + 15')]),
      OrderedDict([('task', '44 - 5')]),
      OrderedDict([('task', '17 + 14')]),
      OrderedDict([('task', '32 - 21')]),
      OrderedDict([('task', '25 + 28')]),
      OrderedDict([('task', '32 - 45')]),
      OrderedDict([('task', '23 - 29')]),
      OrderedDict([('task', '6 - 15')]),
      OrderedDict([('task', '29 + 10')]),
      OrderedDict([('task', '41 + 23')]),
      OrderedDict([('task', '28 + 31')]),
      OrderedDict([('task', '40 - 44')]),
      OrderedDict([('task', '16 + 12')]),
      OrderedDict([('task', '84 + 35')]),
      OrderedDict([('task', '47 + 50')]),
      OrderedDict([('task', '81 + 20')]),
      OrderedDict([('task', '18 - 23')]),
      OrderedDict([('task', '69 - 3')]),
      OrderedDict([('task', '66 - 13')]),
      OrderedDict([('task', '58 + 43')]),
      OrderedDict([('task', '24 + 40')]),
      OrderedDict([('task', '67 - 14')]),
      OrderedDict([('task', '33 - 10')]),
      OrderedDict([('task', '64 + 29')]),
      OrderedDict([('task', '97 - 28')]),
      OrderedDict([('task', '74 - 26')]),
      OrderedDict([('task', '79 - 35')]),
      OrderedDict([('task', '69 - 12')])]
    Routine DisTask
  LoopTerminator trials_3
  Routine Recall
  LoopInitiator trials_4 loopType="TrialHandler"
    loopType = random
    nReps = 25
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    Routine Testing
  LoopTerminator trials_4
