PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = EmotionalValenceMemoryRecall
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Words
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    TextComponent text
      font = ariel
      letterHeight = 0.05
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      text [set every repeat] = $neut_words
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Intro
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    TextComponent Introduction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        A word will appear on the screen.
        Press right arrow key if the word is abstract or left arrow key if it is concrete.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine DisTask
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    TextComponent task
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $math
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Type Here
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent InstText
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click To Submit
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    MouseComponent mouse
      clickable = InstText
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine Recall
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    TextComponent RecallTask
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now, write down as many words as you can remember from the list you saw earlier. Take your time and try to recall as many as possible.  Press "Click to submit" after every word.
        You have 3 minutes to complete this task.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test
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    TextboxComponent TestAns
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Type here
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.2
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    TextComponent Instr
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.2
      text = Click to Submit
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    MouseComponent mouse_2
      clickable = Instr
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.2
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine Intro
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = neutwordlist.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('neut_words', 'trunk')]),
      OrderedDict([('neut_words', 'basket')]),
      OrderedDict([('neut_words', 'fabric')]),
      OrderedDict([('neut_words', 'jelly')]),
      OrderedDict([('neut_words', 'lion')]),
      OrderedDict([('neut_words', 'locker')]),
      OrderedDict([('neut_words', 'bowl')]),
      OrderedDict([('neut_words', 'black')]),
      OrderedDict([('neut_words', 'custom')]),
      OrderedDict([('neut_words', 'flag')]),
      OrderedDict([('neut_words', 'finger')]),
      OrderedDict([('neut_words', 'salad')]),
      OrderedDict([('neut_words', 'hay')]),
      OrderedDict([('neut_words', 'coin')]),
      OrderedDict([('neut_words', 'butter')]),
      OrderedDict([('neut_words', 'truck')]),
      OrderedDict([('neut_words', 'paper')]),
      OrderedDict([('neut_words', 'egg')]),
      OrderedDict([('neut_words', 'market')]),
      OrderedDict([('neut_words', 'tool')]),
      OrderedDict([('neut_words', 'hat')]),
      OrderedDict([('neut_words', 'phase')]),
      OrderedDict([('neut_words', 'nurse')]),
      OrderedDict([('neut_words', 'rain')]),
      OrderedDict([('neut_words', 'paint')])]
    Routine Words
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = DisTask.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('math', '10 + 15 =')]),
      OrderedDict([('math', '69 - 12 =')]),
      OrderedDict([('math', '44 - 5 =')]),
      OrderedDict([('math', '17 + 14 =')]),
      OrderedDict([('math', '32 - 21 =')]),
      OrderedDict([('math', '25 + 28 =')]),
      OrderedDict([('math', '32 - 45 =')]),
      OrderedDict([('math', '23 - 29 =')]),
      OrderedDict([('math', '29 + 10 =')]),
      OrderedDict([('math', '41 + 23 =')]),
      OrderedDict([('math', '28 + 31 =')]),
      OrderedDict([('math', '40 - 44 =')]),
      OrderedDict([('math', '16 + 12 =')]),
      OrderedDict([('math', '84 + 35 =')]),
      OrderedDict([('math', '47 + 50 =')])]
    Routine DisTask
  LoopTerminator trials_3
  Routine Recall
  LoopInitiator trials_4 loopType="TrialHandler"
    loopType = random
    nReps = 25
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    Routine Test
  LoopTerminator trials_4
