PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = EmotionalValenceMemoryRecall
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Words
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    TextComponent text
      font = ariel
      letterHeight = 0.05
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      text [set every repeat] = $pos_word
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Intro
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    TextComponent Introduction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        A word will appear on the screen.
        Press right arrow key if the word is abstract or left arrow key if it is concrete.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine DisTask
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    TextComponent task
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $math
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Type Here
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent InstText
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click To Submit
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    MouseComponent mouse
      clickable = InstText
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine Recall
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    TextComponent RecallTask
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now, write down as many words as you can remember from the list you saw earlier. Take your time and try to recall as many as possible.  Press "Click to submit" after every word.
        You have 3 minutes to complete this task.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Testing
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    TextboxComponent TestAns
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Type here
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.2
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    TextComponent Instr
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.2
      text = Click to Submit
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    MouseComponent mouse_2
      clickable = Instr
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.2
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine Intro
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = poswordlist.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('pos_word', 'merry')]),
      OrderedDict([('pos_word', 'joy')]),
      OrderedDict([('pos_word', 'humor')]),
      OrderedDict([('pos_word', 'mother')]),
      OrderedDict([('pos_word', 'win')]),
      OrderedDict([('pos_word', 'comedy')]),
      OrderedDict([('pos_word', 'fun')]),
      OrderedDict([('pos_word', 'cash')]),
      OrderedDict([('pos_word', 'riches')]),
      OrderedDict([('pos_word', 'kiss')]),
      OrderedDict([('pos_word', 'baby')]),
      OrderedDict([('pos_word', 'joyful')]),
      OrderedDict([('pos_word', 'happy')]),
      OrderedDict([('pos_word', 'lucky')]),
      OrderedDict([('pos_word', 'gift')]),
      OrderedDict([('pos_word', 'music')]),
      OrderedDict([('pos_word', 'cheer')]),
      OrderedDict([('pos_word', 'joke')]),
      OrderedDict([('pos_word', 'glory')]),
      OrderedDict([('pos_word', 'thrill')]),
      OrderedDict([('pos_word', 'proud')]),
      OrderedDict([('pos_word', 'warmth')]),
      OrderedDict([('pos_word', 'profit')]),
      OrderedDict([('pos_word', 'hug')]),
      OrderedDict([('pos_word', 'fame')])]
    Routine Words
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = DisTask.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('task', '10 + 15')]),
      OrderedDict([('task', '44 - 5')]),
      OrderedDict([('task', '17 + 14')]),
      OrderedDict([('task', '32 - 21')]),
      OrderedDict([('task', '25 + 28')]),
      OrderedDict([('task', '32 - 45')]),
      OrderedDict([('task', '23 - 29')]),
      OrderedDict([('task', '6 - 15')]),
      OrderedDict([('task', '29 + 10')]),
      OrderedDict([('task', '41 + 23')]),
      OrderedDict([('task', '28 + 31')]),
      OrderedDict([('task', '40 - 44')]),
      OrderedDict([('task', '16 + 12')]),
      OrderedDict([('task', '84 + 35')]),
      OrderedDict([('task', '47 + 50')]),
      OrderedDict([('task', '81 + 20')]),
      OrderedDict([('task', '18 - 23')]),
      OrderedDict([('task', '69 - 3')]),
      OrderedDict([('task', '66 - 13')]),
      OrderedDict([('task', '58 + 43')]),
      OrderedDict([('task', '24 + 40')]),
      OrderedDict([('task', '67 - 14')]),
      OrderedDict([('task', '33 - 10')]),
      OrderedDict([('task', '64 + 29')]),
      OrderedDict([('task', '97 - 28')]),
      OrderedDict([('task', '74 - 26')]),
      OrderedDict([('task', '79 - 35')]),
      OrderedDict([('task', '69 - 12')])]
    Routine DisTask
  LoopTerminator trials_3
  Routine Recall
  LoopInitiator trials_4 loopType="TrialHandler"
    loopType = random
    nReps = 25
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    Routine Testing
  LoopTerminator trials_4
