PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = WordPrimingExperiment
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar", "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine TestRoutine
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('study_word', 'book')]),
      OrderedDict([('study_word', 'cushion')]),
      OrderedDict([('study_word', 'phone')]),
      OrderedDict([('study_word', 'marble')]),
      OrderedDict([('study_word', 'board')]),
      OrderedDict([('study_word', 'laptop')]),
      OrderedDict([('study_word', 'chart')]),
      OrderedDict([('study_word', 'T-shirt')]),
      OrderedDict([('study_word', 'mouse')]),
      OrderedDict([('study_word', 'pastry')]),
      OrderedDict([('study_word', 'case')]),
      OrderedDict([('study_word', 'cruise')]),
      OrderedDict([('study_word', 'police')]),
      OrderedDict([('study_word', 'keys')]),
      OrderedDict([('study_word', 'poster')])]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('test', 'l_pt_p'), ('reference', 'laptop'), ('old_new', 'old')]),
      OrderedDict([('test', '_ha_t'), ('reference', 'chart'), ('old_new', 'old')]),
      OrderedDict([('test', 'T_hi_t'), ('reference', 'tshirt'), ('old_new', 'old')]),
      OrderedDict([('test', '_ou_se'), ('reference', 'mouse'), ('old_new', 'old')]),
      OrderedDict([('test', 'p_as_ry'), ('reference', 'pastry'), ('old_new', 'old')]),
      OrderedDict([('test', 'c_s_'), ('reference', 'case'), ('old_new', 'old')]),
      OrderedDict([('test', '_ru_is_'), ('reference', 'cruise'), ('old_new', 'old')]),
      OrderedDict([('test', 'p_li_e'), ('reference', 'police'), ('old_new', 'old')]),
      OrderedDict([('test', 'k_y_'), ('reference', 'keys'), ('old_new', 'old')]),
      OrderedDict([('test', 'p_st_r'), ('reference', 'poster'), ('old_new', 'old')]),
      OrderedDict([('test', '_o_rd'), ('reference', 'board'), ('old_new', 'old')]),
      OrderedDict([('test', '_a_bl_'), ('reference', 'marble'), ('old_new', 'old')]),
      OrderedDict([('test', '_ho_e'), ('reference', 'phone'), ('old_new', 'old')]),
      OrderedDict([('test', '_oo_'), ('reference', 'book'), ('old_new', 'old')]),
      OrderedDict([('test', 'c_s_io_'), ('reference', 'cushion'), ('old_new', 'old')]),
      OrderedDict([('test', 'ta_l_'), ('reference', 'table'), ('old_new', 'new')]),
      OrderedDict([('test', 'p_nc_l'), ('reference', 'pencil'), ('old_new', 'new')]),
      OrderedDict([('test', 'v_s_'), ('reference', 'vase'), ('old_new', 'new')]),
      OrderedDict([('test', 'bo_t_e'), ('reference', 'bottle'), ('old_new', 'new')])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
    Routine test
  LoopTerminator trials_2
